PsychoPy2experiment version="2025.1.0"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [2048, 1280]
  color = $[-1,-1,-1]
  expName = fiBCIDecoder
  frameRateMsg = +
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine init
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    CodeComponent init_code
      Code Type = Py
      Before Experiment:
        import sys
        import os
        import json
        import warnings
        from psychopy import logging, core

        project_dir = os.path.dirname(os.path.abspath(__file__))
        if project_dir not in sys.path:
            sys.path.insert(0, project_dir)

        # 1. 导入项目模块
        from src.transmission.trans_control.dataController import DataController
        from src.peripheral.camera.MultiCamThreadRecord import (
            init_camera_thread,
            start_camera_thread,
            exit_camera_thread
        )
        from src.peripheral.audio.AudioThreadRecord import (
            init_audio_thread,
            start_audio_thread,
            exit_audio_thread
        )
        from src.utils.exit_handler import patch_core_quit, register_cleanup_function

        # 2. 读取配置文件
        config_path = os.path.join(project_dir, 'config', 'upper_limb_movement_config.json')

        try:
            with open(config_path, 'r', encoding='utf-8') as f:
                config = json.load(f)
            logging.info(f"✓ Config loaded from {config_path}")
        except Exception as e:
            logging.error(f"✗ Failed to load config: {e}")
            config = {}
            # 使用默认值
            warnings.warn("Using default configuration values")

        # 3. 获取配置参数
        ## 3.1 TCP 连接
        host = config.get("experiment", {}).get("host", "127.0.0.1")
        port = config.get("experiment", {}).get("port", 5001)

        ## 3.2 文本大小
        big_text_size = config.get("experiment", {}).get("big_text_size", 0.25)
        small_text_size = config.get("experiment", {}).get("small_text_size", 0.25)

        ## 3.3 循环次数
        trial_repeats = config.get("experiment", {}).get("trial_repetas", 1)
        block_repeats = config.get("experiment", {}).get("block_repeats", 1)

        ## 3.4 任务类型
        task_type = config.get("experiment", {}).get("task_type", 0)
        task_desc = config.get("experiment", {}).get("task_desc", {"0": "粗大", "1": "精细"})

        if task_type == 1:
            selected_rows = "4:7"
            task_num = 3
        else:
            selected_rows = "0:4"
            task_num = 4
            if task_type != 0:
                print("WARNING: 任务类型只能为0或1，默认为0.")

        ## 3.5资源路径
        conditions_file = config.get("experiment", {}).get(
            "conditions",
            r".\resources\conditions\upper_limb_movement\condition.csv"
        )

        block_conditions_file = config.get("experiment", {}).get(
            "block_conditions",
            r".\resources\conditions\upper_limb_movement\block_conditions.csv"
        )

        sound_dir = config.get("experiment", {}).get(
            "sound_dir",
            r".\resources\audios\upper_limb_movement"
        )
        video_dir = config.get("experiment", {}).get(
            "video_dir",
            r".\resources\videos\upperlimb"
        )

        video_direction = config.get("experiment", {}).get("video_direction","right")
        video_dir =os.path.join(video_dir,video_direction)

        ## 3.6 随机种子
        random_seed = config.get("experiment", {}).get("random_seed", 42)

        ## 3.7 日志输出
        logging.info(f"Experiment configuration:")
        logging.info(f"  Host: {host}")
        # logging.info(f"  COM port: {com_port}")
        logging.info(f"  Task type: {task_type} ({task_desc.get(str(task_type), 'unknown')})")
        logging.info(f"  Block repeats: {block_repeats}")
        logging.info(f"  Trial repeats: {trial_repeats}")

        ## 3.8 判断外设的使能情况
        ### camera
        camera_connected_status = config.get("experiment", {}).get("peripheral_stats", {}).get("is_camera_connected", False)

        ### audio
        audio_connected_status = config.get("experiment", {}).get("peripheral_stats", {}).get("is_audio_connected", False)

        # 4. 初始化 DataController
        # fiBCI项目中，不再使用黑盒上位机，而是使用植入体及对应全植入的上位机。
        # 远程连接目前只有后台数据缓存功能，无命令控制协议。
        # 因此无法控制启动，停止，以及打标。
        dc = None
        try:
            dc = DataController(
                host,
                port,
                4,
                500
            )
            # 启动后台数据缓存
        #    dc.connect()
        #    dc.start()
            logging.info("✓ DataController initialized and started")
        except Exception as e:
            logging.error(f"✗ DataController initialization failed: {e}")
            warnings.warn(f"Could not initialize DataController: {e}")
            print(f"ERROR: {e}")

        # 5. 初始化相机录制
        camera_threads = None
        if camera_connected_status:
            try:
                from src.peripheral.camera.MultiCamThreadRecord import Config as CameraConfig

                camera_config_file = os.path.join(project_dir, 'config', 'upper_limb_movement_config.json')
                camera_threads = init_camera_thread()
                start_camera_thread(camera_threads, mode="production")
                logging.info("✓ Camera recording started")
            except Exception as e:
                logging.error(f"✗ Camera initialization failed: {e}")
                warnings.warn(f"Could not start camera recording: {e}")

        # 6. 初始化音频录制
        audio_thread = None
        if audio_connected_status:
            try:
                audio_thread = init_audio_thread()
                start_audio_thread(audio_thread, mode="production")
                logging.info("✓ Audio recording started")
            except Exception as e:
                logging.error(f"✗ Audio initialization failed: {e}")
                warnings.warn(f"Could not start audio recording: {e}")


        # 7. 注册清理函数
        def cleanup_all_resources():
            logging.info("=" * 50)
            logging.info("Cleaning up resources...")

            # 1. 停止 DataRecv
            if dc:
                try:
                    dc.disConnect()
                    logging.info("✓ DataController closed")
                except Exception as e:
                    logging.error(f"✗ Error closing DataController: {e}")

            # 2. 停止音频录制
            if audio_thread:
                try:
                    exit_audio_thread(audio_thread)
                    logging.info("✓ Audio recording stopped")
                except Exception as e:
                    logging.error(f"✗ Error stopping audio: {e}")

            # 3. 停止相机录制
            if camera_threads:
                try:
                    exit_camera_thread(camera_threads)
                    logging.info("✓ Camera recording stopped")
                except Exception as e:
                    logging.error(f"✗ Error stopping cameras: {e}")

            logging.info("=" * 50)
            logging.info("All resources cleaned up")


        ## 7.1 使用上面自定义的清理函数
        register_cleanup_function(cleanup_all_resources)

        # 8. 打补丁到 PsychoPy 的 core.quit()
        patch_core_quit()
        logging.info("✓ Cleanup handlers registered and patched")

        # 9. 设置随机种子
        import random
        import numpy as np

        random.seed(random_seed)
        np.random.seed(random_seed)
        logging.info(f"✓ Random seed set to {random_seed}")

        # 10. 全局变量初始化用于后续的Routine
        logging.info("=" * 50)
        logging.info("Upper Limb Movement Paradigm Initialized")
        logging.info(f"Task: {task_desc.get(str(task_type), 'unknown')}")
        logging.info("=" * 50)
      End Experiment:
        cleanup_all_resources()
    TextComponent init_text
      letterHeight = 0.25
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = +
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  Routine block_ready
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    CodeComponent br_code
      Code Type = Py
      Begin Routine:
        br_sound_dir = os.path.join(sound_dir, block_audio_name)
    TextComponent br_text
      letterHeight = 0.25
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $block_stimuli
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    TextComponent br_3
      letterHeight = 0.25
      startVal [time (s)] = 5
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent br_2
      letterHeight = 0.25
      startVal [time (s)] = 6
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent br_1
      letterHeight = 0.25
      startVal [time (s)] = 7
      stopVal [duration (s)] = 1.0
      text = 1
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    SoundComponent br_sound
      forceEndRoutine = False
      sound [set every repeat] = $br_sound_dir
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
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  Routine trial_ready
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    CodeComponent tr_code
      Code Type = Py
      Begin Routine:
        tr_tex = stimuli
        tr_sound_dir = os.path.join(sound_dir, audio_name)
    TextComponent tr_text
      letterHeight = 0.25
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $tr_tex
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    SoundComponent tr_sound
      forceEndRoutine = False
      sound [set every repeat] = $tr_sound_dir
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine action
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    CodeComponent act_code
      Code Type = Py
      Begin Routine:
        act_movie_dir = os.path.join(video_dir, video_name)
        act_sound_dir = os.path.join(sound_dir, "开始.wav")


        # 取最新的5s数据，并清空缓冲区
      Each Frame:
        # 检测是否已经过去100ms
        ## 是，取出的缓冲区所有数据，并更新解码数据窗口
            ### 预处理（和解码过程用线程处理）
            ### 解码分类
        ## 否，继续等待


        # 检测解码数据窗口是否更新
        ## 是，检测是否可以输出刺激指令
            ### 检测串口对象，并输出刺激指令（IO，线程处理）
        ## 否，继续等待


        ## *****************保存*******************
        ## 每次接收到数据的时间,相对于范式启动时间(xxx s)
        ## 数据的形状((ch, ts))
        ## 预处理时长和解码时长(xxx ms)
        ## 解码结果(0, 1)
        ## 是否输出刺激指令(0,1)
        ## 指令内容("OxFF--FF")
        ## ****************************************
    MovieComponent act_movie
      No audio = True
      backend = ffpyplayer
      forceEndRoutine = True
      loop = True
      movie [set every repeat] = $act_movie_dir
      size = (1.2, 0.675)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    SoundComponent act_sound
      forceEndRoutine = False
      sound [set every repeat] = $act_sound_dir
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine trial_over
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    CodeComponent to_code
      Code Type = Py
      Begin Routine:
        to_tex = "复位"
        to_sound_dir = os.path.join(sound_dir, "复位.wav")
    TextComponent to_text
      letterHeight = 0.25
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $to_tex
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    SoundComponent to_sound
      forceEndRoutine = False
      sound [set every repeat] = $to_sound_dir
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine inter_trial_interval
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    CodeComponent iti_code
      Code Type = Py
      Begin Routine:
        import random
        # random.seed(random_seed)
        iti_duration = random.randint(2, 10)
        print(f"iti_duration: {iti_duration}")
    TextComponent iti_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = iti_duration
      text = 随机休息
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  Routine block_over
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    CodeComponent bo_code
      Code Type = Py
      Begin Routine:
        bo_tex = "回合结束\n请休息"
        bo_sound_dir = os.path.join(sound_dir, "回合结束_请休息.wav")
    TextComponent bo_text
      letterHeight = 0.25
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $bo_tex
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    SoundComponent bo_sound
      forceEndRoutine = False
      sound [set every repeat] = $bo_sound_dir
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine finish
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    TextComponent finish_text
      letterHeight = 0.25
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = 全部结束
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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Flow
  Routine init
  LoopInitiator block_loop loopType="TrialHandler"
    Selected rows = $selected_rows
    conditionsFile = $block_conditions_file
    loopType = random
    nReps = block_repeats
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    Routine block_ready
    LoopInitiator trial_loop loopType="TrialHandler"
      Selected rows = $selected_rows
      conditionsFile = $conditions_file
      loopType = random
      nReps = trial_repeats
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      Routine trial_ready
      Routine action
      Routine trial_over
      Routine inter_trial_interval
    LoopTerminator trial_loop
    Routine block_over
  LoopTerminator block_loop
  Routine finish
